PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'age': '', 'gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = interoceptive awareness
  keyboardBackend = ioHub
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Routines
  Routine response
    TextComponent text_2
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = تخمین خود را وارد و ثبت کنید.
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    TextboxComponent estimation
      anchor = bottom-center
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent submit
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = ثبت
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    MouseComponent mouse
      clickable = submit
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine instruu
    ImageComponent image_2
      image = instru.jpg
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine confidence
    SliderComponent slider
      forceEndRoutine = True
      granularity = 1
      labels = 'Total guess/No heartbeat awareness','Complete confidence/Full perception of heartbeat'
      letterHeight = 0.02
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_4
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = به میزان اطمینان خود از یک تا ده نمره دهید.
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  Routine Thank_You
    TextComponent thanks
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        از همکاری شما متشکرم
        یک کلید را برای خروج فشار دهید
  Routine start
    SoundComponent sound_1
      sound = 1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    TextComponent text
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = شروع 
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  Routine Count
    TextComponent count
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Practice_duration
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  Routine intero_practice
    TextComponent text_10
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = تمرین
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  Routine Stop
    SoundComponent sound_2
      sound = 1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    TextComponent finish
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = پایان
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  Routine intero_main
    TextComponent text_11
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = برای انجام آزمون اصلی یک کلید را  فشار دهید.
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    KeyboardComponent key_resp13
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine confidence_2
    SliderComponent slider_3
      forceEndRoutine = True
      granularity = 1
      labels = 'Total guess/No heartbeat awareness','Complete confidence/Full perception of heartbeat'
      letterHeight = 0.02
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_5
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = به میزان اطمینان خود از یک تا ده نمره دهید.
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  Routine rest
    TextComponent text_9
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = استراحت
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  Routine response_main
    TextComponent text_6
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = تخمین خود را وارد کنید و یک کلید را فشار دهید.
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    TextboxComponent estimation_3
      anchor = bottom-center
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent submit_2
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = ثبت
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    MouseComponent mouse_2
      clickable = submit
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine count2
    TextComponent count_2
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Practice_duration
      text = بشمارید
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  Routine keb
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = برای ادامه یک کلید را فشار دهید.
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Flow
  Routine instruu
  Routine intero_practice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = duration_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Practice_duration': 25},
      {'Practice_duration': 35},
      {'Practice_duration': 50}]
    Routine fixation
    Routine start
    Routine Count
    Routine Stop
    Routine response
    Routine confidence
  LoopTerminator practice
  Routine intero_main
  LoopInitiator main loopType="TrialHandler"
    conditionsFile = duration.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'duration': 25},
      {'duration': 30},
      {'duration': 35},
      {'duration': 40},
      {'duration': 45},
      {'duration': 50}]
    Routine fixation
    Routine start
    Routine count2
    Routine Stop
    Routine response_main
    Routine confidence
    Routine rest
    Routine keb
  LoopTerminator main
  Routine Thank_You
